PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = child_task
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Routines
  Routine welcome_screen
    TextComponent text_welcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press the space bar to start.
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    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank_1000ms
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine response
    KeyboardComponent key_imagerating
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    TextComponent text_response
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = 1   2   3   4   5
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  Routine end_screen
    TextComponent text_end
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Done.

        Please stay still.
  Routine image
    ImageComponent display_image
      image [set every repeat] = $imageFile
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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  Routine cue
    TextComponent text_cue
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $textCue
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Flow
  Routine welcome_screen
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:61
    conditionsFile = image_simuli.xlsx
    loopType = random
    nReps = 60
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    conditions:
      [OrderedDict([('imageFile', 'images/myBaby/myBaby16.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby1.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby2.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby3.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby4.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby5.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby6.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby7.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby8.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby9.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby10.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby11.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby12.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby13.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby14.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby15.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby17.jpg'), ('condition', 'myBaby')]),
      OrderedDict([('imageFile', 'images/myBaby/myBaby18.jpg'), ('condition', 'myBaby')])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
    Routine cue
    Routine blank_1000ms
    Routine image
    Routine response
    Routine blank_1000ms
  LoopTerminator trials
  Routine end_screen
